PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Use version = 2020.2
  Window size (pixels) = [1680, 1050]
  color = $[-1,-1,-1]
  expName = IORpsychopy
  logging level = debug
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Routines
  Routine fixation
    PolygonComponent rightSquare
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      pos = (5, 0)
      shape = rectangle
      size = (1, 1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
      units = deg
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    PolygonComponent leftSquare
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      pos = (-5, 0)
      shape = rectangle
      size = (1, 1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
      units = deg
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    PolygonComponent fixation_fixation
      fillColor = $[1,1,1]
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
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  Routine instruction
    TextComponent instrText
      languageStyle = Arabic
      letterHeight = 5
      startVal [time (s)] = 0.0
      units = deg
      wrapWidth = 0
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      text:
        欢迎参加本次实验！

        实验开始时会出现两个方块和一个十字，请
        正视十字。50ms后一个方框会随机出现在
        左边或者右边，然后一段时间后一个目标黑
        色圆形会出现，你的任务是尽快的选择目标
        黑色圆形图案的方向，方向键左键代表目标
        在左边，方向键右键代表目标在右边。目标
        方块可能会出现也可能不出现，不出现的情
        况下不需要按任何键。请注意，方框的位置
        和目标黑色圆形图案的位置无关。

        ——按空格开始——
    KeyboardComponent instrkesp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine cue
    PolygonComponent CueSquare
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      pos [set every repeat] = (cueCorr, 0)
      shape = rectangle
      size = (1.5, 1.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.05
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    PolygonComponent cueSquareleft
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      pos = (-5, 0)
      shape = rectangle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
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    PolygonComponent cueSquareright
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      pos = (5, 0)
      shape = rectangle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
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    PolygonComponent fixation_cue
      fillColor = $[1,1,1]
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
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  Routine target
    PolygonComponent suqare_target_left
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      pos = (-5, 0)
      shape = rectangle
      size = (1, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent square_target_right
      fillColor = $[1,1,1]
      pos = (5, 0)
      shape = rectangle
      size = (1, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixation_target
      fillColor = $[1,1,1]
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent target_circle
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 1000
      pos [set every repeat] = (targetCorr, 0)
      shape = regular polygon...
      size = (0.7, 0.7)
      startEstim = 0.1
      startVal [time (s)] = $SOA
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    KeyboardComponent resp
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startEstim = 0.1
      startVal [time (s)] = $SOA
      storeCorrect = True
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        if targetCorr == 200:
            continueRoutine = False
  Routine rest
    TextComponent Resttext
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text = Take a break
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  Routine end
    TextComponent endText
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      text = 谢谢您参与本次实验
      wrapWidth = 1
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Flow
  Routine instruction
  LoopInitiator n_blocks loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = condition.xlsx
      loopType = random
      nReps = 15
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      conditions:
        [OrderedDict([('SOA', 50), ('cuePosition', 'left'), ('targetPostion', 'left'), ('cueCorr', -5.0), ('targetCorr', -5.0), ('corrAns', 'left'), ('validity', 1.0)]),
        OrderedDict([('SOA', 50), ('cuePosition', 'left'), ('targetPostion', 'left'), ('cueCorr', -5.0), ('targetCorr', -5.0), ('corrAns', 'left'), ('validity', 1.0)]),
        OrderedDict([('SOA', 50), ('cuePosition', 'left'), ('targetPostion', 'left'), ('cueCorr', -5.0), ('targetCorr', -5.0), ('corrAns', 'left'), ('validity', 1.0)]),
        OrderedDict([('SOA', 50), ('cuePosition', 'left'), ('targetPostion', 'left'), ('cueCorr', -5.0), ('targetCorr', -5.0), ('corrAns', 'left'), ('validity', 1.0)]),
        OrderedDict([('SOA', 50), ('cuePosition', 'left'), ('targetPostion', 'left'), ('cueCorr', -5.0), ('targetCorr', -5.0), ('corrAns', 'left'), ('validity', 1.0)]),
        OrderedDict([('SOA', 50), ('cuePosition', 'left'), ('targetPostion', 'left'), ('cueCorr', -5.0), ('targetCorr', -5.0), ('corrAns', 'left'), ('validity', 1.0)]),
        OrderedDict([('SOA', 50), ('cuePosition', 'left'), ('targetPostion', 'left'), ('cueCorr', -5.0), ('targetCorr', -5.0), ('corrAns', 'left'), ('validity', 1.0)]),
        OrderedDict([('SOA', 50), ('cuePosition', 'left'), ('targetPostion', 'left'), ('cueCorr', -5.0), ('targetCorr', -5.0), ('corrAns', 'left'), ('validity', 1.0)]),
        OrderedDict([('SOA', 50), ('cuePosition', 'left'), ('targetPostion', 'left'), ('cueCorr', -5.0), ('targetCorr', -5.0), ('corrAns', 'left'), ('validity', 1.0)])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
      Routine fixation
      Routine cue
      Routine target
    LoopTerminator trials
    Routine rest
  LoopTerminator n_blocks
  Routine end
