PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = IORmonitor
  Screen = 1
  Units = deg
  Window size (pixels) = [1680, 1050]
  color = $[-1,-1,-1]
  expName = older_version_IORpsychopy
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Routines
  Routine instruction
    TextComponent instrText
      letterHeight = 1
      pos = (-9, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text
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    KeyboardComponent start
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent start_of_experiment
      Code Type = Auto->JS
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      Begin Experiment:
        text= "              欢迎参加本次实验！\n \
                实验开始时会出现两个方块和一个十字，请正视十字。\n " \
               "50ms后一个方框会随机出现在左边或者右边，然后一\n \
               段时间后一个目标黑色圆形会出现，你的任务是尽快的选\n \
               择目标黑色圆形图案的方向，方向键左键代表目标在左边，\n \
               方向键右键代表目标在右边。目标方块可能会现也可能不出现，\n \
               不出现的情况下不需要按任何键。请注意，方框的位置和目标\n \
               黑色圆形图案的位置无关。\n \
                             ——按空格开始——"
  Routine fixation
    PolygonComponent cross_fixation
      fillColor = $[1,1,1]
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
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    PolygonComponent square_left_fixation
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      pos = (-5, 0)
      shape = rectangle
      size = (1, 1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
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    PolygonComponent square_right_fixation
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      pos = (5, 0)
      shape = rectangle
      size = (1, 1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
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  Routine cue
    PolygonComponent cross_cue
      fillColor = $[1,1,1]
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
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    PolygonComponent square_left_cue
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      pos = (-5, 0)
      shape = rectangle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
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    PolygonComponent suqare_right_cue
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      pos = (5, 0)
      shape = rectangle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
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    PolygonComponent cue_square
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      pos [set every repeat] = (cueX, 0)
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
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  Routine target
    PolygonComponent cross_target
      fillColor = $[1,1,1]
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent square_left_target
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      pos = (-5, 0)
      shape = rectangle
      size = (1, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent square_right_target
      fillColor = $[1,1,1]
      lineColor = $[-1,-1,-1]
      pos = (5, 0)
      shape = rectangle
      size = (1, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent Targetcircle_target
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 200
      pos [set every repeat] = (targetX, 0)
      shape = regular polygon...
      size = (0.7, 0.7)
      startEstim = 0.1
      startVal [time (s)] = $SOA
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    KeyboardComponent resp
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startEstim = 0.1
      startVal [time (s)] = $SOA
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      Each Frame:
        if targetX == 200:
            if t >= SOA:
                continueRoutine = False
  Routine rest
    TextComponent restText
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every frame] = $restTime
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        restTime = '离休息结束还有 30 秒'
      Each Frame:
        timer = str(f'{30-t:.0f}')
        restTime = "离休息结束还有 {} 秒".format(timer)
  Routine end
    TextComponent endText
      letterHeight = 2
      startVal [time (s)] = 0.0
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      text:
        感谢您参与本次实验。
        请告知实验人员，耐心等待。
Flow
  Routine instruction
  LoopInitiator n_blocks loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = condition.xlsx
      loopType = random
      nReps = 15
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      conditions:
        [OrderedDict([('SOA', 0.1), ('cuePosition', 'left'), ('targetPostion', 'left'), ('cueX', -5), ('targetX', -5), ('corrAns', 'left'), ('validity', 1.0)]),
        OrderedDict([('SOA', 0.1), ('cuePosition', 'left'), ('targetPostion', 'right'), ('cueX', -5), ('targetX', 5), ('corrAns', 'right'), ('validity', 0.0)]),
        OrderedDict([('SOA', 0.1), ('cuePosition', 'right'), ('targetPostion', 'left'), ('cueX', 5), ('targetX', -5), ('corrAns', 'left'), ('validity', 1.0)]),
        OrderedDict([('SOA', 0.1), ('cuePosition', 'right'), ('targetPostion', 'right'), ('cueX', 5), ('targetX', 5), ('corrAns', 'right'), ('validity', 0.0)]),
        OrderedDict([('SOA', 0.1), ('cuePosition', 'right'), ('targetPostion', None), ('cueX', 5), ('targetX', 200), ('corrAns', None), ('validity', None)]),
        OrderedDict([('SOA', 0.2), ('cuePosition', 'left'), ('targetPostion', 'left'), ('cueX', -5), ('targetX', -5), ('corrAns', 'left'), ('validity', 1.0)]),
        OrderedDict([('SOA', 0.2), ('cuePosition', 'left'), ('targetPostion', 'right'), ('cueX', -5), ('targetX', 5), ('corrAns', 'right'), ('validity', 0.0)]),
        OrderedDict([('SOA', 0.2), ('cuePosition', 'right'), ('targetPostion', 'left'), ('cueX', 5), ('targetX', -5), ('corrAns', 'left'), ('validity', 1.0)]),
        OrderedDict([('SOA', 0.2), ('cuePosition', 'right'), ('targetPostion', 'right'), ('cueX', 5), ('targetX', 5), ('corrAns', 'right'), ('validity', 0.0)])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
      Routine fixation
      Routine cue
      Routine target
    LoopTerminator trials
    Routine rest
  LoopTerminator n_blocks
  Routine end
